WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(SessionPath, RigPath, TaskPath) => #0
Annotation TODO(Text="Should be part of package") => #1
#0, #1 -> GroupWorkflow ReadSchemas
    ExternalizedMapping(Path(DisplayName=SessionPath))
    -> Bonsai.IO.ReadAllText(Path=..\local\UclOpenSession.json)
    -> AsyncSubject RawSessionSchema => #2
    ExternalizedMapping(Path(DisplayName=RigPath))
    -> Bonsai.IO.ReadAllText(Path=..\local\UclOpenVrCorridor2pRig.json)
    -> AsyncSubject RawRigSchema => #5
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=..\local\UclOpenVrCorridor2pTaskLogic.json)
    -> AsyncSubject RawTaskSchema => #8
    #2, #5, #8 -> Zip
    -> WorkflowOutput

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenSession>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenVrCorridor2pRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskSchema
    -> Take(Count=1)
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenVrCorridor2pTaskLogic>)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=MovementSource)
    -> UclOpenHfVisualDataSchema.MatchMovementSource(Type=TypeMapping<UclOpenHfVisualDataSchema.PlaybackMovementSource>) => #16
    -> MemberSelector(Selector=FilePath)
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader => #19
      FileName: C:/Users/neurogears/source/repos/ucl-open/vr-corridor-2p/temp_data/sub-PlaybackTest/ses-PlaybackTest_date-2026-03-31T10-57-29/RenderFrameCount/RenderFrameCount.csv
      ListSeparator=","
      SkipRows=1
    #16 -> MemberSelector(Selector=Index)
    -> PropertyMapping(Value) => #21
    #19, #21 -> Index(Operand=IntProperty(Value=4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> ReplaySubject PlaybackSource(BufferSize=nil)

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #26
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #29
    #26, #29 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=1)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

GroupWorkflow Hardware
    GroupWorkflow MatrixArduino
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Arduino.PortName)
        -> PropertyMapping(PortName) => #2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Arduino.BaudRate)
        -> PropertyMapping(BaudRate) => #5
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Arduino.NewLine)
        -> PropertyMapping(NewLine) => #8
        #2, #5, #8 -> IncludeWorkflow SerialDevice
          Path=UclOpen.Devices:SerialDevice.bonsai
          PortName=COM10
          BaudRate=1000000
          Encoding=utf-8
          NewLine="\n"
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1
          SerialMessageSubjectName=MatrixSerialDevice

        SubscribeSubject MatrixSerialDevice
        -> ParseMatrixSerialDevice
        -> PublishSubject MatrixArduino

    GroupWorkflow Display
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen) => #1
        -> PropertyMapping(TargetUpdateFrequency(Selector=TargetUpdateFrequency), TargetRenderFrequency(Selector=TargetRenderFrequency)) => #2
        #1 -> MemberSelector(Selector=Calibration)
        -> Index(Operand=StringProperty(Value=debug))
        -> PropertyMapping(Width(Selector=Intrinsics.FrameWidth), Height(Selector=Intrinsics.FrameHeight)) => #5
        #2, #5 -> Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path) => #11
        Annotation TODO(Text="Should be part of package") => #12
        #11, #12 -> GroupWorkflow LoadTextureBank
            ExternalizedMapping(Path, SearchPattern)
            -> Bonsai.IO.GetFiles(Path=../textures, SearchPattern=*, SearchOption=TopDirectoryOnly)
            -> Merge
            -> CreateObservable LoadTexture
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TexturePath

                SubscribeSubject TexturePath
                -> Bonsai.IO.GetFileNameWithoutExtension => #4
                SubscribeSubject TexturePath
                -> PropertyMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #7
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=Repeat
                  WrapT=Repeat
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=../textures\waves.png
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #7 -> Zip
                -> WorkflowOutput
            -> Concat
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2) => #5
            ExternalizedMapping(Name(DisplayName=TextureBank)) => #6
            #5, #6 -> AsyncSubject TextureBank

        GroupWorkflow AsyncQuad
            SubscribeSubject PostDrawingRight
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SyncQuad.ExtentX)
            -> PropertyMapping(ExtentX) => #4
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SyncQuad.ExtentY)
            -> PropertyMapping(ExtentY) => #7
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SyncQuad.LocationX)
            -> PropertyMapping(LocationX) => #10
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SyncQuad.LocationY)
            -> PropertyMapping(LocationY) => #13
            SubscribeSubject QuadState
            -> PropertyMapping(ColorR, ColorG, ColorB) => #15
            #1, #4, #7, #10, #13, #15 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.5
              ExtentY=0.5
              LocationX=1
              LocationY=-1
              Layer=1
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> PublishSubject PostDrawQuad

            SubscribeSubject RigSchema
            -> SelectMany CreateRandom
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RigSettings

                SubscribeSubject RigSettings
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #4
                SubscribeSubject RigSettings
                -> MemberSelector(Selector=QuadTimeLowerBound)
                -> PropertyMapping(Lower) => #7
                SubscribeSubject RigSettings
                -> MemberSelector(Selector=QuadTimeUpperBound)
                -> PropertyMapping(Upper) => #10
                #4, #7, #10 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.2, Upper=0.5)
                -> Disable Bonsai.Numerics.Permutation
                -> WorkflowOutput
            -> BehaviorSubject RandomSource

            BehaviorSubject<System.Single> QuadState

            Unit
            -> SelectMany Off
                SubscribeSubject RandomSource
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> AsyncSubject Delay

                WorkflowInput Source1 => #5
                SubscribeSubject Delay
                -> PropertyMapping(DueTime) => #7
                #5, #7 -> Delay(DueTime=PT0.339S)
                -> FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject QuadState
            -> SelectMany On
                SubscribeSubject RandomSource
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> AsyncSubject Delay

                WorkflowInput Source1 => #5
                SubscribeSubject Delay
                -> PropertyMapping(DueTime) => #7
                #5, #7 -> Delay(DueTime=PT0.413S)
                -> FloatProperty(Value=1)
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject QuadState
            -> Repeat

        Bonsai.Shaders.RenderFrame => #15
        SubscribeSubject CurrentPosition
        -> PropertyMapping(Eye) => #17
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FarClip)
        -> PropertyMapping(FarClip) => #20
        #15, #17, #20 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=-2, Z=0), NearClip=0.1, FarClip=200, Light(X=0, Y=0, Z=0))
        -> PublishSubject DrawCall => #22
        Annotation(Text="Gray seems to be mean luminance gray screen and overwrites the colour in create window ") => #23
        #22, #23 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
        -> GroupWorkflow Left
            WorkflowInput Source1 => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=left))
            -> PropertyMapping(Width(Selector=Intrinsics.DisplayWidth), Height(Selector=Intrinsics.DisplayHeight)) => #5
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=left)) => #9
            -> MemberSelector(Selector=Extrinsics.Rotation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=-1.0472, Z=0)
            -> PropertyMapping(Rotation) => #13
            #9 -> MemberSelector(Selector=Extrinsics.Translation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=-12, Y=3.5, Z=9)
            -> PropertyMapping(Translation) => #17
            #0, #5, #13, #17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=-12, Y=3.5, Z=9)) => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=GammaCorrectionFile)
            -> PropertyMapping(GammaLut) => #21
            #18, #21 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=../luts/NoRed_New_HALFINTENSITY_LUT_SALEEM20_20260213.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1)
            -> WorkflowOutput
        #24 -> GroupWorkflow Center
            WorkflowInput Source1 => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=center))
            -> PropertyMapping(Width(Selector=Intrinsics.DisplayWidth), Height(Selector=Intrinsics.DisplayHeight)) => #5
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=center)) => #9
            -> MemberSelector(Selector=Extrinsics.Rotation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
            -> PropertyMapping(Rotation) => #13
            #9 -> MemberSelector(Selector=Extrinsics.Translation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=3.5, Z=15)
            -> PropertyMapping(Translation) => #17
            #0, #5, #13, #17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=3.5, Z=15)) => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=GammaCorrectionFile)
            -> PropertyMapping(GammaLut) => #21
            #18, #21 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=../luts/NoRed_New_HALFINTENSITY_LUT_SALEEM20_20260213.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1)
            -> WorkflowOutput
        #24 -> GroupWorkflow Right
            WorkflowInput Source1 => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=right))
            -> PropertyMapping(Width(Selector=Intrinsics.DisplayWidth), Height(Selector=Intrinsics.DisplayHeight)) => #5
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Calibration)
            -> Index(Operand=StringProperty(Value=right)) => #9
            -> MemberSelector(Selector=Extrinsics.Rotation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=1.0472, Z=0)
            -> PropertyMapping(Rotation) => #13
            #9 -> MemberSelector(Selector=Extrinsics.Translation)
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=12, Y=3.5, Z=9)
            -> PropertyMapping(Translation) => #17
            #0, #5, #13, #17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=12, Y=3.5, Z=9)) => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=GammaCorrectionFile)
            -> PropertyMapping(GammaLut) => #21
            #18, #21 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=../luts/NoRed_New_HALFINTENSITY_LUT_SALEEM20_20260213.bmp) => #22
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333343, Height=1)
            -> WorkflowOutput
            #22 -> PublishSubject PostDrawingRight
        #15 -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> BehaviorSubject RenderFrameCount

        Bonsai.Shaders.UpdateFrame
        -> PublishSubject UpdateFrame
        -> Disable Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
        -> Disable ElementIndex
        -> Disable PublishSubject FramePixels

GroupWorkflow Logging
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=LoggingRootPath)
    -> PropertyMapping(Path) => #2
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=AnimalId)
    -> PropertyMapping(SubjectId) => #5
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=SessionId)
    -> PropertyMapping(SessionId) => #8
    #2, #5, #8 -> IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=PlaybackTest, SessionId=PlaybackTest, Path=../temp_data)

    SubscribeSubject MatrixArduino
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=MatrixArduino)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\MatrixArduino\MatrixArduino.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject LandmarkSet
    -> Merge
    -> ElementIndex => #14
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #16
    #14, #16 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=LandmarkChoice)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\LandmarkChoice\LandmarkChoice.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject CurrentPosition => #20
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #22
    #20, #22 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=VrPosition)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\VrPosition\VrPosition.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    Disable SubscribeSubject FramePixels => #26
    Disable SubscribeSubject MatrixArduino
    -> Disable MemberSelector(Selector=Seconds) => #28
    #26, #28 -> Disable WithLatestFrom
    -> Disable Bonsai.Harp.CreateTimestamped => #30
    Disable Annotation(Text="TODO - Variation on standard video logger") => #31
    #30, #31 -> Disable GroupWorkflow LogVideo
        WorkflowInput Source1
        -> UclOpen.Core.GroupByTime(ChunkSize=1) => #1
        ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate) => #2
        #1, #2 -> CreateObservable LogVideo
            WorkflowInput Source1
            -> AsyncSubject Data

            SubscribeSubject Data
            -> Merge => #3
            SubscribeSubject Data
            -> MemberSelector(Selector=Key) => #5
            ExternalizedMapping(Name) => #6
            #5, #6 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=FrameDump) => #3
                -> UclOpen.Core.StripSubstring => #4
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #7
                #0, #4, #3, #7 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #8
            #3, #8 -> Bonsai.IO.CsvWriter
              FileName=C:/UCLOpenDATA/\sub-M25126/20260216/\ses-M25126_BaselineCorridorTest_20260216_00001_date-2026-02-16T18-48-29\FrameDump\FrameDump.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
              Selector="Seconds,Value.Index"
            -> MemberSelector(Selector=Value.Value) => #10
            SubscribeSubject Data
            -> MemberSelector(Selector=Key) => #12
            #12, #6 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=FrameDump) => #3
                -> UclOpen.Core.StripSubstring => #4
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #7
                #0, #4, #3, #7 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #14
            ExternalizedMapping(FrameRate) => #15
            #10, #14, #15 -> Bonsai.Vision.VideoWriter
              FileName=C:/UCLOpenDATA/\sub-M25126/20260216/\ses-M25126_BaselineCorridorTest_20260216_00001_date-2026-02-16T18-48-29\FrameDump\FrameDump.avi
              Suffix=None
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=60
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput

    SubscribeSubject RenderFrameCount => #33
    SubscribeSubject CurrentPosition => #34
    #33, #34 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
      Expression:
        new(
          it.Item1 as RenderFrameCount,
          it.Item2.X as PositionX,
          it.Item2.Y as PositionY,
          it.Item2.Z as PositionZ
        )
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #38
    #36, #38 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=RenderFrameCount)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\RenderFrameCount\RenderFrameCount.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject QuadState => #42
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #44
    #42, #44 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=QuadState)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\QuadState\QuadState.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject RigSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=RigSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter(Path=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\RigSchema\RigSchema.json, Suffix=None, Overwrite=false)
        -> WorkflowOutput

    SubscribeSubject TaskLogicSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TaskLogicSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter(Path=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\TaskLogicSchema\TaskLogicSchema.json, Suffix=None, Overwrite=false)
        -> WorkflowOutput

    SubscribeSubject SessionSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=SessionSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter(Path=../temp_data\sub-PlaybackTest\ses-PlaybackTest_date-2026-04-02T10-42-03\SessionSchema\SessionSchema.json, Suffix=None, Overwrite=false)
        -> WorkflowOutput

BehaviorSubject<OpenTK.Vector3> CurrentPosition

SubscribeSubject TaskLogicParameters
-> MemberSelector(Selector=EyeHeightOffset)
-> PropertyMapping(Y)
-> Bonsai.Shaders.CreateVector3(X=0, Y=-2, Z=0)
-> MulticastSubject CurrentPosition

SubscribeSubject RigSchema
-> MemberSelector(Selector=MovementSource) => #13
-> UclOpenHfVisualDataSchema.MatchMovementSource(Type=TypeMapping<UclOpenHfVisualDataSchema.MouseWheelMovementSource>)
-> SelectMany MouseWheelMovement => #15
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject MouseWheelMovementSource

    Bonsai.Windows.Input.MouseWheel
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: Convert.ToSingle(it)
    SubscribeSubject MouseWheelMovementSource
    -> MemberSelector(Selector=Gain)
    -> PropertyMapping(Value) => #7
    #4, #7 -> Multiply(Operand=FloatProperty(Value=0.1))
    -> WorkflowOutput
#13 -> UclOpenHfVisualDataSchema.MatchMovementSource(Type=TypeMapping<UclOpenHfVisualDataSchema.SensorMovementSource>)
-> SelectMany SensorMovementSource
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SensorMovementSource

    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Value.EncoderPos)
    -> WorkflowOutput
-> Disable Merge => #18
-> Skip(Count=1) => #19
#18, #19 -> Zip
-> OverflowDifference
-> Bonsai.Scripting.Expressions.ExpressionTransform => #22
  Expression: Convert.ToSingle(it)
#15, #22 -> Merge
-> PublishSubject MovementDelta
#13 -> Disable UclOpenHfVisualDataSchema.MatchMovementSource(Type=TypeMapping<UclOpenHfVisualDataSchema.PlaybackMovementSource>)
-> Disable SelectMany PlaybackMovementSource
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject PlaybackMovementSource

    SubscribeSubject PlaybackSource
    -> Skip(Count=1) => #4
    SubscribeSubject MatrixArduino => #5
    #4, #5 -> Zip
    -> MemberSelector(Selector=Item1) => #7
    SubscribeSubject PlaybackMovementSource
    -> MemberSelector(Selector=Index)
    -> PropertyMapping(Value) => #10
    #7, #10 -> Index(Operand=IntProperty(Value=1))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
-> Unit
-> PublishSubject LickDetection

BehaviorSubject<System.Collections.Generic.List(UclOpenHfVisualDataSchema.Landmark)> LandmarkSet
BehaviorSubject<System.Reactive.Unit> Reward

ExternalizedMapping(Filter(DisplayName=StartExperimentKey, Category=HotKeys))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
-> Take(Count=1)
-> AsyncSubject StartExperiment

ExternalizedMapping(Filter(DisplayName=StopExperimentKey, Category=HotKeys))
-> Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift", SuppressRepetitions=false)
-> Take(Count=1)
-> AsyncSubject EndExperiment

Defer TaskLogic => #40
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Blocks)
    -> Index(Operand=IntProperty(Value=0)) => #2
    -> Condition RandomiseTrials
        WorkflowInput Source1
        -> MemberSelector(Selector=RandomiseTrialOrder)
        -> WorkflowOutput
    -> MemberSelector(Selector=AvailableTrials) => #4
    SubscribeSubject RngSeed => #5
    #4, #5 -> WithLatestFrom
    -> ShuffleList => #7
    #2 -> Condition InOrderTrials
        WorkflowInput Source1
        -> MemberSelector(Selector=RandomiseTrialOrder)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=AvailableTrials) => #9
    #7, #9 -> Merge
    -> Merge
    -> CreateObservable DoTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Trial

        GroupWorkflow ResetPosition
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=EyeHeightOffset)
            -> PropertyMapping(Y)
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-2, Z=0)
            -> MulticastSubject CurrentPosition
            -> WorkflowOutput

        GroupWorkflow SetLandmarks
            SubscribeSubject Trial
            -> CollapseTrialLandmarks
            -> AsyncSubject Landmarks
            -> MulticastSubject LandmarkSet => #3
            -> MaximumBoundary
            -> AsyncSubject MaximumBoundary => #5
            SubscribeSubject Trial
            -> MemberSelector(Selector=BoundaryThreshold)
            -> PropertyMapping(Value) => #8
            #5, #8 -> Subtract(Operand=DoubleProperty(Value=-35.9))
            -> AsyncSubject MaximumBoundaryThreshold
            SubscribeSubject Trial
            -> MemberSelector(Selector=EndTrialThreshold)
            -> PropertyMapping(Value) => #13
            #5, #13 -> Subtract(Operand=DoubleProperty(Value=-35.9))
            -> AsyncSubject TrialBoundary
            #3 -> MinimumBoundary
            -> AsyncSubject MinimumBoundary

            DoubleProperty(Value=0)
            -> Take(Count=1)
            -> AsyncSubject MinimumBoundaryThreshold

            SubscribeSubject MaximumBoundary => #21
            SubscribeSubject MinimumBoundary => #22
            #21, #22 -> Zip
            -> Subtract
            -> AsyncSubject BackgroundSize

            SubscribeSubject MinimumBoundary => #26
            SubscribeSubject BackgroundSize
            -> Divide(Operand=DoubleProperty(Value=2)) => #28
            #26, #28 -> Zip
            -> Add
            -> AsyncSubject BackgroundPosition

        GroupWorkflow RewardThresholds
            SubscribeSubject CurrentPosition => #0
            SubscribeSubject Landmarks => #1
            #0, #1 -> CombineLatest
            -> CurrentLandmark
            -> BehaviorSubject CurrentLandmark

            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Z) => #6
            SubscribeSubject Trial
            -> MemberSelector(Selector=DetectLickThreshold) => #8
            #6, #8 -> WithLatestFrom
            -> GreaterThan
            -> BehaviorSubject DetectLickThresholdReached

            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Z) => #13
            SubscribeSubject Trial
            -> MemberSelector(Selector=AutoRewardThreshold) => #15
            #13, #15 -> WithLatestFrom
            -> GreaterThan
            -> BehaviorSubject AutoRewardThreshold

            SubscribeSubject AutoRewardThreshold
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> Take(Count=1)
            -> MulticastSubject Reward

            SubscribeSubject LickDetection => #24
            SubscribeSubject CurrentLandmark => #25
            #24, #25 -> WithLatestFrom
            -> Condition RewardedLandmark
                WorkflowInput Source1
                -> Condition NotNull
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> LandmarkIsEmpty
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item2.RewardValence)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Unit
            -> Take(Count=1)
            -> MulticastSubject Reward

        GroupWorkflow PositionUpdate
            SubscribeSubject MovementDelta => #0
            SubscribeSubject Trial
            -> MemberSelector(Selector=MovementVisualGain)
            -> PropertyMapping(Value) => #3
            #0, #3 -> Multiply(Operand=FloatProperty(Value=0.0613)) => #4
            Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #5
            #4, #5 -> WithLatestFrom
            -> Multiply => #7
            SubscribeSubject CurrentPosition => #8
            #7, #8 -> WithLatestFrom
            -> Add
            -> MulticastSubject CurrentPosition => #11
            -> Condition PastMaxBoundary => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Z) => #1
                SubscribeSubject MaximumBoundaryThreshold => #2
                #1, #2 -> WithLatestFrom
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject MaximumBoundaryThreshold
            -> PropertyMapping(Z) => #14
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=EyeHeightOffset)
            -> PropertyMapping(Y) => #17
            #12, #14, #17 -> Bonsai.Shaders.CreateVector3(X=0, Y=-2, Z=199.9) => #18
            #11 -> Condition PastMinBoundary => #19
                WorkflowInput Source1
                -> MemberSelector(Selector=Z) => #1
                SubscribeSubject MinimumBoundaryThreshold => #2
                #1, #2 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            SubscribeSubject MinimumBoundaryThreshold
            -> PropertyMapping(Z) => #21
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=EyeHeightOffset)
            -> PropertyMapping(Y) => #24
            #19, #21, #24 -> Bonsai.Shaders.CreateVector3(X=0, Y=-2, Z=0) => #25
            #18, #25 -> Merge
            -> MulticastSubject CurrentPosition

        SubscribeSubject Landmarks
        -> Merge
        -> CreateObservable DrawLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=plaid))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject CenterOffset
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> PropertyMapping(TranslationX) => #37
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #39
            #34, #37, #39 -> IncludeWorkflow => #40
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-6
              TranslationY=0
              TranslationZ=160
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=8
              ScaleY=12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            SubscribeSubject CenterOffset
            -> PropertyMapping(TranslationX) => #42
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #44
            #34, #42, #44 -> IncludeWorkflow => #45
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=6
              TranslationY=0
              TranslationZ=160
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=8
              ScaleY=12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            SubscribeSubject CenterOffset
            -> PropertyMapping(TranslationY) => #47
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #49
            #34, #47, #49 -> IncludeWorkflow => #50
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=6
              TranslationZ=160
              RotationZ=0
              RotationY=-90
              RotationX=-90
              ScaleX=8
              ScaleY=12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            SubscribeSubject CenterOffset
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> PropertyMapping(TranslationY) => #53
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #55
            #34, #53, #55 -> IncludeWorkflow => #56
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-6
              TranslationZ=160
              RotationZ=0
              RotationY=-90
              RotationX=-90
              ScaleX=8
              ScaleY=12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            #40, #45, #50, #56 -> Merge
            -> WorkflowOutput
        -> Merge => #10
        SubscribeSubject Trial
        -> MemberSelector(Selector=BackgroundLandmarkLeft) => #12
        Annotation(Text="TODO - BAD! Redundant repeated code in the draw landmark observables. Must be a way to make this more generic.") => #13
        #12, #13 -> CreateObservable DrawLeftLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=BG1))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0.01))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1.01))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject CenterOffset
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> PropertyMapping(TranslationX) => #37
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #39
            #34, #37, #39 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-6.01
              TranslationY=0
              TranslationZ=100
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=200
              ScaleY=12.12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput
        -> Merge => #15
        SubscribeSubject Trial
        -> MemberSelector(Selector=BackgroundLandmarkRight)
        -> CreateObservable DrawRightLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=BG2))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0.01))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1.01))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject CenterOffset
            -> PropertyMapping(TranslationX) => #36
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #38
            #34, #36, #38 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=6.01
              TranslationY=0
              TranslationZ=100
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=200
              ScaleY=12.12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput
        -> Merge => #19
        SubscribeSubject Trial
        -> MemberSelector(Selector=BackgroundLandmarkCeil)
        -> CreateObservable DrawCeilLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=BG3))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0.01))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1.01))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject CenterOffset
            -> PropertyMapping(TranslationY) => #36
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #38
            #34, #36, #38 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=6.01
              TranslationZ=100
              RotationZ=0
              RotationY=-90
              RotationX=-90
              ScaleX=200
              ScaleY=12.12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput
        -> Merge => #23
        SubscribeSubject Trial
        -> MemberSelector(Selector=BackgroundLandmarkFloor)
        -> CreateObservable DrawFloorLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=BG4))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0.01))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1.01))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject CenterOffset
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> PropertyMapping(TranslationY) => #37
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #39
            #34, #37, #39 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-6.01
              TranslationZ=100
              RotationZ=0
              RotationY=-90
              RotationX=-90
              ScaleX=200
              ScaleY=12.12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput
        -> Merge => #27
        SubscribeSubject Trial
        -> MemberSelector(Selector=FarLandmark)
        -> CreateObservable DrawFarLandmark
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Landmark => #2
            SubscribeSubject TextureBank => #3
            #2, #3 -> CombineLatest
            -> InputMapping(Selector=Item2, Value(Selector=Item1.Texture))
            -> Index(Operand=StringProperty(Value=grey))
            -> AsyncSubject Texture

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth)
            -> Multiply(Operand=DoubleProperty(Value=0.5)) => #10
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Add(Operand=DoubleProperty(Value=0.0001))
            -> Take(Count=1)
            -> AsyncSubject CenterOffset

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=CorridorWidth) => #18
            SubscribeSubject Landmark
            -> MemberSelector(Selector=CenterOffset)
            -> Add(Operand=DoubleProperty(Value=1))
            -> PropertyMapping(Value) => #22
            #18, #22 -> Multiply(Operand=DoubleProperty(Value=1))
            -> Take(Count=1)
            -> AsyncSubject Scale

            SubscribeSubject DrawCall => #26
            SubscribeSubject Texture => #27
            SubscribeSubject Landmark => #28
            #27, #28 -> CombineLatest => #29
            #26, #29 -> CombineLatest => #30
            -> MemberSelector(Selector=Item2.Item1)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #32
            #32, #30 -> WithLatestFrom
            -> InputMapping(Selector=Item2.Item1, TranslationZ(Selector=Item2.Item2.Item2.Position), ScaleX(Selector=Item2.Item2.Item2.Size)) => #34
            SubscribeSubject Scale
            -> PropertyMapping(ScaleY) => #36
            #34, #36 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=200
              RotationZ=0
              RotationY=0
              RotationX=0
              ScaleX=100
              ScaleY=12
              ScaleZ=1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput
        -> Merge => #31
        #10, #15, #19, #23, #27, #31 -> Merge => #32
        GroupWorkflow TrialCompletionConditions => #33
            SubscribeSubject Trial
            -> MemberSelector(Selector=MaximumTrialTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1M)
            -> Unit => #5
            SubscribeSubject CurrentPosition
            -> Condition PastTrialBoundary
                WorkflowInput Source1
                -> MemberSelector(Selector=Z) => #1
                SubscribeSubject TrialBoundary => #2
                #1, #2 -> WithLatestFrom
                -> GreaterThan
                -> WorkflowOutput
            -> Unit => #8
            SubscribeSubject LickDetection => #9
            SubscribeSubject CurrentLandmark => #10
            #9, #10 -> WithLatestFrom
            -> Condition UnrewardedLandmark
                WorkflowInput Source1
                -> Condition NotNull
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> LandmarkIsEmpty
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item2.RewardValence)
                -> LessThanOrEqual(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition PrematureLick => #13
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                SubscribeSubject DetectLickThresholdReached => #2
                #1, #2 -> WithLatestFrom
                -> BitwiseAnd
                -> WorkflowOutput
            SubscribeSubject AutoRewardThreshold => #14
            SubscribeSubject CurrentLandmark
            -> Condition NotNull
                WorkflowInput Source1
                -> LandmarkIsEmpty
                -> BitwiseNot
                -> WorkflowOutput
            -> DistinctUntilChanged
            -> MemberSelector(Selector=RewardValence)
            -> Accumulate
            -> GreaterThan(Operand=IntProperty(Value=0)) => #20
            #14, #20 -> CombineLatest
            -> BitwiseOr
            -> BitwiseNot => #23
            #13, #23 -> WithLatestFrom
            -> Condition PreRewardZone
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Unit => #26
            #5, #8, #26 -> Merge
            -> WorkflowOutput
        #32, #33 -> TakeUntil
        -> Last => #35
        SubscribeSubject RngSeed => #36
        SubscribeSubject Trial
        -> MemberSelector(Selector=InterTrialIntervalLowerBound)
        -> PropertyMapping(Lower) => #39
        SubscribeSubject Trial
        -> MemberSelector(Selector=InterTrialIntervalUpperBound)
        -> PropertyMapping(Upper) => #42
        #36, #39, #42 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=3, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #46
        #35, #46 -> Delay(DueTime=PT3.497S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    SubscribeSubject PlaybackSource => #16
    SubscribeSubject UpdateFrame => #17
    #16, #17 -> Zip
    -> MemberSelector(Selector=Item1)
    -> InputMapping(Z(Selector=it)) => #20
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=EyeHeightOffset)
    -> PropertyMapping(Y) => #23
    #20, #23 -> Bonsai.Shaders.CreateVector3(X=0, Y=-2, Z=0)
    -> MulticastSubject CurrentPosition

    Disable SubscribeSubject DrawCall
    -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #27
    Disable SubscribeSubject TextureBank
    -> Disable Index(Operand=StringProperty(Value=bark)) => #29
    #27, #29 -> Disable CombineLatest => #30
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D) => #32
    #30 -> Disable MemberSelector(Selector=Item1) => #33
    #32, #33 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawImage.bonsai
      TextureName=""
      ExtentX=360
      ExtentY=360
      LocationX=0
      LocationY=0
      Layer=0
      Angle=0
      ScaleX=1
      ScaleY=1
      ShiftX=0
      ShiftY=0
SubscribeSubject StartExperiment => #41
#40, #41 -> SubscribeWhen => #42
SubscribeSubject EndExperiment => #43
#42, #43 -> TakeUntil
